CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:OrigGray
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OrigGray
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:OrigGray
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:CorrBlue
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:ImageAfterMath
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:40
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:ImageAfterMath
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
TrackObjects:[module_num:11|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
    Choose a tracking method:Overlap
    Select the objects to track:IdentifySecondaryObjects
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:2
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
Tile:[module_num:12|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
    Select an input image:OrigGray
    Name the output image:Detected_objects
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:TrackedCells

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:IdentifySecondaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Detected_objects
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Ecoli_chamber_Objects_T
    Number of digits:4
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Documents\\GitHub\\article\\CellProfiler\\E.coli_mono_agarose_noisy\\1. Raw Images\\2. CP outputs\\tracking
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents\\GitHub\\article\\CellProfiler\\E.coli_mono_agarose_noisy\\1. Raw Images\\2. CP outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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